PsychoPy2experiment version="2022.2.5"
Settings
  Data file delimiter = semicolon
  Experiment info = {'participant': '', 'płeć': "['kobieta', 'mężczyzna']", 'wiek': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = eyetracker
  eyetracker = Pupil Labs
  keyboardBackend = ioHub
  plConfidenceThreshold = 0.6
  plPupilCaptureRecordingEnabled = True
  plPupilRemoteAddress = 127.0.0.1
  plPupilRemotePort = 50020
  plPupilRemoteTimeoutMs = 1000
  plPupillometryOnly = False
  plSurfaceName = dell
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Routines
  Routine end
    TextComponent text_instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Dziękujemy za udział w badaniu!
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    KeyboardComponent key_resp_3
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
    TextComponent space
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text = Naciśnij spację, żeby przejść dalej
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    KeyboardComponent space_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextboxComponent welcome_message
      alignment = top-left
      anchor = top-left
      bold = False
      editable = False
      letterHeight = 0.04
      pos = (-.8, .4)
      size = (1.6, .5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $inst_text
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        with open('materials/instruction.txt', encoding="utf-8") as file:
            instruction_list = file.readlines()
        if expInfo['płeć'] == 'kobieta':
            inst_text = instruction_list[0].replace(';','\n\n')
        else:
            inst_text = instruction_list[1].replace(';','\n\n')
      Begin Routine:
        win.mouseVisible = False
  Routine ratings
    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = .5
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    TextboxComponent textbox
      alignment = center-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, .4)
      size = (1.5, .2)
      startVal [time (s)] = 0.0
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      text:
        Na ile gwiazdek w skali od 1 do 5 oceniłabyś/oceniłbyś prezentowany przed chwilą produkt? Najedź kursorem na rząd z wybraną liczbą gwiazdek i naciśnij lewy klawisz myszy.
    ImageComponent stars
      image = png/stars.png
      pos = (-.5, 0.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_2_1
      image = png/stars.png
      pos = (-.5, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_2_2
      image = png/stars.png
      pos = (-.4, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_3_1
      image = png/stars.png
      pos = (-.5, -.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_3_2
      image = png/stars.png
      pos = (-.4, -.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_3_3
      image = png/stars.png
      pos = (-.3, -.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_4_1
      image = png/stars.png
      pos = (-.5, -.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_4_2
      image = png/stars.png
      pos = (-.4, -.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_4_3
      image = png/stars.png
      pos = (-.3, -.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_4_4
      image = png/stars.png
      pos = (-.2, -.2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_5_1
      image = png/stars.png
      pos = (-.5, -.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_5_2
      image = png/stars.png
      pos = (-.4, -.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_5_3
      image = png/stars.png
      pos = (-.3, -.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_5_4
      image = png/stars.png
      pos = (-.2, -.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent stars_5_5
      image = png/stars.png
      pos = (-.1, -.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent star_1
      bold = True
      color = None
      fillColor = None
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.5, .1)
      size = (.1,.1)
      startVal [time (s)] = 0
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    ButtonComponent star_2
      bold = True
      color = None
      fillColor = None
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.45, 0)
      size = (.2,.1)
      startVal [time (s)] = 0
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    ButtonComponent star_3
      bold = True
      color = None
      fillColor = None
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.4, -.1)
      size = (.3,.1)
      startVal [time (s)] = 0
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    ButtonComponent star_4
      bold = True
      color = None
      fillColor = None
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.35, -.2)
      size = (.4,.1)
      startVal [time (s)] = 0
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    ButtonComponent star_5
      bold = True
      color = None
      fillColor = None
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.3, -.3)
      size = (.5,.1)
      startVal [time (s)] = 0
      text = Click here
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine trust_manipulation
    TextComponent space2
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text = Naciśnij spację, żeby przejść dalej
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    TextboxComponent trust_instruction
      alignment = top-left
      anchor = top-left
      bold = False
      editable = False
      letterHeight = 0.04
      pos = (-.8, .4)
      size = (1.6, .5)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $trust
    KeyboardComponent space2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent trust
      Code Type = Auto->JS
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      Begin Experiment:
        if int(expInfo['participant']) % 2 == 0:
            with open('materials/trust.txt', encoding="utf-8") as file:
                trust_list = file.readlines()
            if expInfo['płeć'] == 'kobieta':
                trust = trust_list[0]
            else:
                trust = trust_list[1]
        else:
            with open('materials/untrust.txt', encoding="utf-8") as file:
                trust_list = file.readlines()
            if expInfo['płeć'] == 'kobieta':
                trust = trust_list[0]
            else:
                trust = trust_list[1]
  Routine products_display
    ImageComponent stimulus
      anchor = top-center
      image [set every repeat] = $image
      pos = (0, 0.9)
      size = (0.7,0.7)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      units = norm
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $price
      units = norm
      wrapWidth = 50
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    TextboxComponent left_text
      alignment = top-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.04
      lineSpacing = 0.8
      pos = (-.5, -0.15)
      size = (.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $facts
      units = norm
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    TextboxComponent right_text
      alignment = top-left
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.04
      lineSpacing = 0.8
      pos = (.5, -0.15)
      size = (.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $opinions
      units = norm
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    TextComponent left_title
      letterHeight = 0.05
      pos = (-.5, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $left
      units = norm
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    TextComponent right_title
      letterHeight = 0.05
      pos = (.5, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $right
      units = norm
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        from utils import remote_annotations as ra
        import time
        import random


        ip_address = '127.0.0.1'
        port = 50020
        # 1. Setup network connection
        capture_exists = ra.check_capture_exists(ip_address, port)
        if capture_exists:
            pupil_remote, pub_socket = ra.setup_pupil_remote_connection(ip_address, port)

            # 2. Setup local clock function
            local_clock = time.perf_counter

            # 3. Measure clock offset accounting for network latency
            stable_offset_mean = ra.measure_clock_offset_stable(
                pupil_remote, clock_function=local_clock, n_samples=10
            )

            pupil_time_actual = ra.request_pupil_time(pupil_remote)
            local_time_actual = local_clock()
            pupil_time_calculated_locally = local_time_actual + stable_offset_mean

            ra.notify(pupil_remote,{"subject": "start_plugin", "name": "Annotation_Capture", "args": {}},)
      Begin Experiment:
        if capture_exists:
            # start a recording (necessary for this example script)
            pupil_remote.send_string("R")
            pupil_remote.recv_string()
      Begin Routine:
        left = 'FAKTY'
        right = 'OPINIE'
        if random.randint(0,1):
            opinions, facts = facts, opinions
            left, right = right, left

        if capture_exists:
            local_time = local_clock()
            label = product + '_' + left + '_start'
            minimal_trigger = ra.new_trigger(label, local_time + stable_offset_mean)
            ra.send_trigger(pub_socket, minimal_trigger)
      End Experiment:
        if capture_exists:
            # stop recording
            pupil_remote.send_string("r")
            pupil_remote.recv_string()
      End Routine:
        if capture_exists:
            local_time = local_clock()
            label = product + '_' + left + '_end'
            minimal_trigger = ra.new_trigger(label, local_time + stable_offset_mean)
            ra.send_trigger(pub_socket, minimal_trigger)
Flow
  Routine instruction
  Routine trust_manipulation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = materials/conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'product': 'laptop', 'facts': 'Posiada ekran o przekątnej 15.6" i wysokiej rozdzielczości. Matowa powłoka matrycy pozwala na korzystanie z komputera nawet przy dużym słońcu.\n\nWyposażony w dwurdzeniowy procesor.\n\nWbudowana pamięć RAM o pojemności 8 GB pozwala na uruchomienie kilku aplikacji jednocześnie oraz granie w wymagające sprzętowo gry komputerowe.\n\nDysk SSD o pojemności 256 GB.\n\nślad węglowy: 423 kg', 'opinions': 'Bardzo dobre wykonanie, minimalistyczny wygląd, podoba mi się, że nie ma zbędnych naklejek. Praca na nim przebiega płynnie, ekran rzeczywiście ładnie odwzorowuje kolo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,
      {'product': 'tablet', 'facts': 'Posiada czytelny wyświetlacz o przekątnej 10,5 cala.\n\nJest zasilany akumulatorem o pojemności 7040 mAh i ma opcję szybkiego ładowania.\n\nPosiada dwa aparaty. Przedni pozwala robić selfie i nagrywać filmy z ręki, a tylny umożliwia nagrywanie filmów w Full HD.\n\nWbudowane 4 GB pamięci RAM pozwala obsługiwać nawet kilka aplikacji naraz.\n\nślad węglowy: 170 kg', 'opinions': 'jestem zadowolona , jakość adekwatna do ceny , a nawet lepsza.\n\nŚwietny wygląd, komfort użytkowania i osiągi jak na ten budżet. Polecam!\n\nSolidny, dobrze wykonany. Działa sprawnie, jest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,
      {'product': 'smartwatch', 'facts': 'Czytelny wyświetlacz 1.4”.\n\nBezprzewodowa łączność ze smartphonem (kompatybilny zarówno z Androidem jak i iOSem).\n\nAsystent zdrowotny z funkcjami pomiaru ciśnienia i EKG, analiza składu ciała, zaawansowana analiza snu, czujniki aktywności fizycznej.\n\nBateria pracuje do 40 godzin i naładujesz ją od 0% do 100% w godzinę i 48 minut.\n\nPosiada 16 GB pamięci wewnętrznej.\n\nślad węglowy: 43 kg', 'opinions': 'Super Smartwatch. Pomógł mi zadbać o zdrowie, fajnie się z nim ćwiczy. Bateria mi trzymała raczej nieźle, a jestem na to wyczulona. Ogólnie Polecam. J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,
      {'product': 'smartband', 'facts': 'Bezprzewodowa łączność ze smartphonem (kompatybilny zarówno z Androidem jak i iOSem).\n\nAutomatycznie wykrywa 3 tryby: bieżnia, bieganie lub spacery na świeżym powietrzu.\n\nPrzy standardowym użytkowaniu działa do 14 dni na jednym naładowaniu baterii - w trybie oszczędzania baterii maksymalnie do 20 dni.\n\nślad węglowy: 36 kg', 'opinions': 'Bardzo dobry zakup. Wygląda jak smartwatch, estetycznie wykonany , posiada wielorakie funkcje, których szukałem. No i możliwości sparowania są na plus!\n\nUdany zakup. Spełnił wszystkie moje oczekiwania. Nawet na chudsze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
    Routine products_display
    Routine ratings
  LoopTerminator trials
  Routine end
